PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = audio
  Screen = 1
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Routines
  Routine beep
    SoundComponent sound_2
      sound = Beep.wav
      volume = 10
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
    CodeComponent code
      Begin Routine:
        import random
        time = random.random()*0.5 + 2
    TextComponent text_3
      stopVal [duration (s)] = $time
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $Direction
      volume = 10
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
  Routine Instruction
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Audio Cue

        Right - Imagine Right hand movement
        Left - Imagine Left hand movement
        Up - Imagine both hands movement
        Down - Imagine both hands at rest
  Routine silence
    TextComponent text_2
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = audio.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'Direction': u'Down.mp3'},
      {'Direction': u'Up.mp3'},
      {'Direction': u'Left.mp3'},
      {'Direction': u'Right.mp3'}]
    Routine trial
    Routine silence
    Routine beep
  LoopTerminator trials
