PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = untitled
  Screen = 1
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Routines
  Routine fixation
    ImageComponent image_2
      stopVal [duration (s)] = $time
      startVal [time (s)] = 0.0
      image = fixationCross.png
      size = (0.141, 0.25)
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    CodeComponent code
      Begin Routine:
        import random
        time = random.random()*0.5 + 2
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      image [set every repeat] = $Direction
      size = (0.282, 0.5)
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  Routine Instruction
    TextComponent text_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please Think as follows when you see a cue
        - If cue is to move left, imagine moving left hand
        - If cue is to move right, imagine moving right hand
        - If cue is to move up, imagine moving both hands
        - If cue is to move down, imagine both hands at rest
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = direction.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'Direction': u'U'},
      {'Direction': u'D'},
      {'Direction': u'L'},
      {'Direction': u'R'}]
    Routine trial
    Routine fixation
  LoopTerminator trials
