PsychoPy2experiment version="3.0.0b12"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  color = black
  expName = untitled
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Routines
  Routine fixation
    ImageComponent image_2
      image = fixationCross.png
      size = (0.141, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        import random
        time = random.random()*0.5 + 3
  Routine trial
    ImageComponent image
      image [set every repeat] = $Direction
      size = (0.282, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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  Routine Instruction
    TextComponent text_2
      color = grey
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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      text:
        Welcome! Please react to the cues (arrows) as follows:

        - Left Arrow: MOVE moving left hand
        - Right Arrow: MOVE moving right hand
        - Up Arrow: MOVE moving both hands
        - Down Arrow: MOVE both hands at rest
Flow
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = direction.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [{'Direction': 'U'},
      {'Direction': 'D'},
      {'Direction': 'L'},
      {'Direction': 'R'}]
    Routine trial
    Routine fixation
  LoopTerminator trials
